OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Signal Input
Comment
  Displayment of the Signal
Comment
  After filtering
Comment
  Spectral analysis

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Identity => #1
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch 1 duration (in sec) = 2.000000
  Epoch 1 intervals (in sec) = 0.500000
-> Spectral analysis => #4
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#4.Amplitude -> Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#2 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#1, Stimulations=#0.Stimulations -> Signal display RAW SIGNAL
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
