OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  TODO: make this mechanism more dynamic that works with the in-game settings

Comment
  COMPLETED
Comment
  Monitor_settings.lua

  writes in the config folder, Takes the Screen Refresh rate as an input and writes in the file


  http://openvibe.inria.fr/steady-state-visual-evoked-potentials/
Comment
  Experiment_settings.lua

  S_freq = {}
  Frequency_NUM = 0

  Target_L_Color = {}
  Target_D_Color = {}
  target_training_Cap = {}
  target_training_pos = {}

  epoch_time = nil
  epoc_delay = nil
  freq_tolerance = nil

Config Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/Monitor_settings.lua
  Screen Refresh Rate = 60
-> Experiment Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/Experiment_settings.lua
  Target Light Color = 100,12,0
  Target Dark Color = 10,10,10
  Stimulation Frequencies = 20;15;12;10
  Processing Epoch Duration = 0.5
  Processing Epoch Interval = 0.5
  Processing Frequency Tolerance = 0.25
  Selected channels = 1:5
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
