OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  temporal filter before channel selector
Comment
  Due to change
Comment
  Training Phase
Comment
  min: use order 6
Comment
  min: use order 6
Comment
  min: use order 6

0x341d3912 CSV File Reader
  Filename = C:/Users/Mahra/Desktop/CE901/ce901_pisheh_var_m/My BCI/signals/my-signal.csv

Matlab Scripting
  Box clock frequency in Hz = 64
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2013b/bin/win32/matlab.exe
  Matlab working directory = ${Player_ScenarioDirectory}/
  Initialize function = matlab_Initialize
  Process function = matlab_Process
  Uninitialize function = matlab_Uninitialize

Identity => #2
#2.Output stream 1 -> Reference Channel
  Channel = Ref_Nose
  Channel Matching Method = Smart
-> Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4"
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #5
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 6
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Input stream 1=#5, Input stream 2=#2.Output stream 2 -> Identity => #6
#6.Output stream 1 -> Temporal filter "Frequency 1" => #7
  Filter method = Butterworth
  Filter type = Band Stop
  Filter order = 8
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 6
  Pass band ripple (dB) = 0.500000
Input signal=#7, Input stimulations=#6.Output stream 2 -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #13
#6.Output stream 1 -> Temporal filter "Frequency 1" => #14
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 6
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 6
  Pass band ripple (dB) = 0.500000
Input signal=#14, Input stimulations=#6.Output stream 2 -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #20
Stimulations=#6.Output stream 2, Features for class 1=#20, Features for class 2=#13 -> Classifier trainer => #21
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Right
  Class 2 label = OVTK_GDF_Left
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Stimulation listener
  Log level to use = Important warning
#21 -> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Identity => #25
#25.Output stream 1 -> 0x341d3912 Temporal filter "Frequency 2" => #26
  Filter method = Butterworth
  Filter type = Band Stop
  Filter order = 8
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 6
  Pass band ripple (dB) = 0.500000
Input signal=#26, Input stimulations=#25.Output stream 2 -> 0x341d3912 Stimulation based epoching "SBE"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> 0x341d3912 Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> 0x341d3912 Simple DSP "DSP"
  Equation = x*x
-> 0x341d3912 Signal average "Sg Avg"
-> 0x341d3912 Simple DSP "DSP"
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #32
#25.Output stream 1 -> 0x341d3912 Temporal filter "Frequency 2" => #33
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 6
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 6
  Pass band ripple (dB) = 0.500000
Input signal=#33, Input stimulations=#25.Output stream 2 -> 0x341d3912 Stimulation based epoching "SBE"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> 0x341d3912 Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> 0x341d3912 Simple DSP "DSP"
  Equation = x*x
-> 0x341d3912 Signal average "Sg Avg"
-> 0x341d3912 Simple DSP "DSP"
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #39
Stimulations=#25.Output stream 2, Features for class 1=#39, Features for class 2=#32 -> 0x341d3912 Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop

0x341d3912 Identity => #42
#42.Output stream 1 -> 0x341d3912 Temporal filter "Frequency 2" => #43
  Filter method = Butterworth
  Filter type = Band Stop
  Filter order = 8
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 6
  Pass band ripple (dB) = 0.500000
Input signal=#43, Input stimulations=#42.Output stream 2 -> 0x341d3912 Stimulation based epoching "SBE"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> 0x341d3912 Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> 0x341d3912 Simple DSP "DSP"
  Equation = x*x
-> 0x341d3912 Signal average "Sg Avg"
-> 0x341d3912 Simple DSP "DSP"
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #49
#42.Output stream 1 -> 0x341d3912 Temporal filter "Frequency 3" => #50
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 6
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 6
  Pass band ripple (dB) = 0.500000
Input signal=#50, Input stimulations=#42.Output stream 2 -> 0x341d3912 Stimulation based epoching "SBE"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> 0x341d3912 Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.062500
-> 0x341d3912 Simple DSP "DSP"
  Equation = x*x
-> 0x341d3912 Signal average "Sg Avg"
-> 0x341d3912 Simple DSP "DSP"
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #56
Stimulations=#42.Output stream 2, Features for class 1=#56, Features for class 2=#49 -> 0x341d3912 Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
