OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Scenario description

  This step will use the recorded signals  to generate classifiers.
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency
Comment
  Signal processing for the third stimulation frequency
Comment
  Signal processing for the fourth stimulation frequency
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/ssvep-record-subjectF.ov
#0.Output stream 2 -> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/channel-selector.cfg
-> Temporal filter "Notch 50Hz" => #2
  Filter method = Butterworth
  Filter type = Band stop
  Filter order = 4
  Low cut frequency (Hz) = 49
  High cut frequency (Hz) = 51
  Pass band ripple (dB) = 0.5
Input stream 1=#2, Input stream 2=#0.Output stream 3 -> Identity => #3
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #4
#4.Output stream 1 -> Temporal filter "Frequency 1 (base)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 5.20455
  High cut frequency (Hz) = 5.70455
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
-> Spatial Filter => #6
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
#4.Output stream 1 -> Temporal filter "Frequency 1 (2nd harmonic)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10.6591
  High cut frequency (Hz) = 11.1591
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1h1.cfg
-> Spatial Filter => #8
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-1h1.cfg
#4.Output stream 2 -> Target Separator => #9
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#6, Input stimulations=#9.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #14
  Equation = log(1+x)
Input signal=#6, Input stimulations=#9.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #19
  Equation = log(1+x)
Input signal=#8, Input stimulations=#9.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #24
  Equation = log(1+x)
Input stream 1=#14, Input stream 2=#24 -> Feature aggregator => #25
Input signal=#8, Input stimulations=#9.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #30
  Equation = log(1+x)
Input stream 1=#19, Input stream 2=#30 -> Feature aggregator => #31
Stimulations=#4.Output stream 2, Features for class 1=#25, Features for class 2=#31 -> Classifier trainer "Trainer for frequency 1" => #32
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Linear
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #33
#33.Output stream 1 -> Temporal filter "Frequency 2 (base)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.4166
  High cut frequency (Hz) = 6.9166
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
-> Spatial Filter => #35
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
#33.Output stream 1 -> Temporal filter "Frequency 2 (2nd harmonic)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 13.0832
  High cut frequency (Hz) = 13.5832
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2h1.cfg
-> Spatial Filter => #37
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-2h1.cfg
#33.Output stream 2 -> Target Separator => #38
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#35, Input stimulations=#38.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #43
  Equation = log(1+x)
Input signal=#35, Input stimulations=#38.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #48
  Equation = log(1+x)
Input signal=#37, Input stimulations=#38.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #53
  Equation = log(1+x)
Input stream 1=#43, Input stream 2=#53 -> Feature aggregator => #54
Input signal=#37, Input stimulations=#38.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #59
  Equation = log(1+x)
Input stream 1=#48, Input stream 2=#59 -> Feature aggregator => #60
Stimulations=#33.Output stream 2, Features for class 1=#54, Features for class 2=#60 -> Classifier trainer "Trainer for frequency 2" => #61
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Linear
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #62
#62.Output stream 1 -> Temporal filter "Frequency 3 (base)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7.25
  High cut frequency (Hz) = 7.75
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
-> Spatial Filter => #64
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3.cfg
#62.Output stream 1 -> Temporal filter "Frequency 3 (2nd harmonic)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3h1.cfg
-> Spatial Filter => #66
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-3h1.cfg
#62.Output stream 2 -> Target Separator => #67
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2 4
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#64, Input stimulations=#67.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #72
  Equation = log(1+x)
Input signal=#64, Input stimulations=#67.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #77
  Equation = log(1+x)
Input signal=#66, Input stimulations=#67.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #82
  Equation = log(1+x)
Input stream 1=#72, Input stream 2=#82 -> Feature aggregator => #83
Input signal=#66, Input stimulations=#67.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #88
  Equation = log(1+x)
Input stream 1=#77, Input stream 2=#88 -> Feature aggregator => #89
Stimulations=#62.Output stream 2, Features for class 1=#83, Features for class 2=#89 -> Classifier trainer "Trainer for frequency 3" => #90
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Linear
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
Input stream 1=#3.Output stream 1, Input stream 2=#3.Output stream 2 -> Identity => #91
#91.Output stream 1 -> Temporal filter "Frequency 4 (base)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 7.25
  High cut frequency (Hz) = 7.75
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4.cfg
-> Spatial Filter => #93
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4.cfg
#91.Output stream 1 -> Temporal filter "Frequency 4 (2nd harmonic)"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-4h1.cfg
-> Spatial Filter => #95
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/classifiers/csp-4h1.cfg
#91.Output stream 2 -> Target Separator => #96
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 4
  Non Targets = 0 1 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#93, Input stimulations=#96.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #101
  Equation = log(1+x)
Input signal=#93, Input stimulations=#96.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #106
  Equation = log(1+x)
Input signal=#95, Input stimulations=#96.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #111
  Equation = log(1+x)
Input stream 1=#101, Input stream 2=#111 -> Feature aggregator => #112
Input signal=#95, Input stimulations=#96.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 7
  Epoch offset (in sec) = 3.5
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #117
  Equation = log(1+x)
Input stream 1=#106, Input stream 2=#117 -> Feature aggregator => #118
Stimulations=#91.Output stream 2, Features for class 1=#112, Features for class 2=#118 -> Classifier trainer "Trainer for frequency 4" => #119
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-4.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_00
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Linear
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
New input=#32, New input(1)=#61, New input(2)=#90, New input(3)=#119 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
